PsychoPy2experiment version="2020.2.5"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 800]
  color = $[1,1,1]
  expName = smdt_melody
  logging level = debug
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from random import choice, randint
        from copy import deepcopy


        # SMDT ARTICLE: "... tones in the range C4–B5..." means that
        # 12 tones are selected from
        def jump_within_octave(prev_tones, low_bound, up_bound):
            """
            returns a random integer that is within the provided lower and upper bound
            as well as within -+11 from the last prev_tones value
            :param prev_tones: list of integers indicating positions of previous tones
            :param low_bound: lower bound of allowed position values
            :param up_bound: upper bound of allowed position values
            :return: integer indication tone positioned <1 octave away from the previous one
            """
            last_prev_tone = prev_tones[len(prev_tones)-1]
            # if the lower bound is at least one octave below the previous tone, allow for values
            # up to 11 semitones below the previous tone
            lower_allowed = last_prev_tone-11 if last_prev_tone-11 > low_bound else low_bound
            higher_allowed = last_prev_tone+11 if last_prev_tone+11 < up_bound else up_bound
            prel_choice_ls = list(range(lower_allowed, higher_allowed))  # get list of of tones [lower_allowed, higher_allowed]
            choice_ls = []
            for tone_val in prel_choice_ls:
                if tone_val not in prev_tones:  # check for each tone if it's already in the list of tone positions
                    choice_ls.append(tone_val)
            return choice(choice_ls)


        def is_tonal(tone_ls):
            """
            checks if a list of tone positions fits any of the tonal scale patterns
            :param tone_ls: list of integers indicating positions of tones
            :return: boolean - True if input tone positions do fit one of the tonal scales
            """
            lowest_tone = min(tone_ls)
            # form list of tone positions relative to lowest tone position in input tone_ls
            rel_tone_ls = [tone-lowest_tone for tone in tone_ls]
            # defining the different tonal scale patterns
            major_ls = [0, 2, 4, 5, 7, 9, 11]
            asc_minor_ls = [0, 2, 3, 5, 7, 9, 11]
            desc_minor_ls = [0, 2, 3, 5, 7, 8, 10]
            harm_minor_ls = [0, 2, 3, 5, 7, 8, 11]
            all_scales = [major_ls, asc_minor_ls, desc_minor_ls, harm_minor_ls]
            for scale in all_scales:
                # form a set with all tone positions in scale
                scale_set = set(scale + [tone_pos+12 for tone_pos in scale])
                # go through each starting position up to 11 and compare the tone list's positions
                # with the list of scale tone positions
                for start_pos in range(12):
                    rel_tone_set = set([tone_pos+start_pos for tone_pos in rel_tone_ls])
                    # if all the tone_ls's positions are in the scalar tone positions,
                    # return True (as this means the tone distances are in accordance with
                    # a tonal scale's positions)
                    if rel_tone_set.issubset(scale_set):
                        return True
            # if the for loop doesn't find a matching scale, say that the tones do not fit a tonal scale pattern
            return False


        def gen_atonal_sequence(n_tones, max_tone_pos):
            """
            generates an atonal sequence of tone positions spanning a maximum of as many semitones as specified
            :param n_tones: integer specifying number of tones to generate
            :param max_tone_pos: integer specifying maximum tone position (in number of semitones)
            :return: list of tone positions
            """
            assert n_tones > 3, "too few notes, need to generate at least 4"
            while True:
                # randomly pick first tone position
                tone_ls = [randint(0, max_tone_pos)]
                # generate tones by jumping within octave (each jump based on latest value of tone_ls)
                for foo in range(n_tones-1):
                    tone_ls.append(jump_within_octave(tone_ls,
                                                      low_bound=0, up_bound=max_tone_pos))
                # if the generated tones are tonal/fit into a tonal scale, skip to next loop iteration
                if is_tonal(tone_ls):
                    continue
                return tone_ls


        def conv_pos_c4(pos_ls):
            """
            takes in a list of tone positions and converts them to tone names, assuming that 0 corresponds
            to the tone C4
            :param pos_ls: list of tone positions
            :return: list of string elements, each with a tone specification, e. g. "C#4"
            """
            tone_names = [
              "C4", "C#4", "D4", "D#4", "E4", "F4", "F#4", "G4",
              "G#4", "A4", "A#4", "B4", "C5", "C#5", "D5", "D#5",
              "E5", "F5", "F#5", "G5", "G#5", "A5", "A#5"
            ]
            out_names = [tone_names[pos] for pos in pos_ls]
            return out_names


        def shift_one_tone(pos_ls, min_allowed, max_allowed):
            """
            Takes in a list of tone positions, creates a copy and shifts one of
            the positions in the copy. The shift is done so that if the tone was
            below a preceding tone, it will stay below that tone, and if it was
            above the preceding tone, it will stay that way. The same goes for
            if the tone is followed by another tone - the relationship has to
            stay the same. Also, the new tone is not allowed to be the same as
            any of the other tones. The return value indicates the new list of
            tone positions, and an integer representing the list index of the
            changed tone position.
            :param pos_ls: list of tone positions
            :param min_allowed: minimum (inclusive) allowed tone position value
            :param max_allowed: maximum (inclusive) allowed tone position value
            :return: tuple of list of integers and single integer
            """
            while True:
                shift_ls = deepcopy(pos_ls)
                # add "extra" tones at beginning/end, to ensure that the likelihood
                # of the first/last tone in the actual sequence being shifted is
                # about the same as the likelihood for each of the 'middle' tones
                # being shifted (ie there are similar constraints for all tones)
                shift_ls.insert(
                    0,
                    jump_within_octave(shift_ls[::-1], min_allowed, max_allowed)
                )
                shift_ls.append(
                    jump_within_octave(shift_ls, min_allowed, max_allowed)
                )
                min_bound = min_allowed
                max_bound = max_allowed
                # randomly pick one of the tone positions
                rand_ind = randint(1, len(shift_ls)-2)
                rand_pos = shift_ls[rand_ind]
                pre_pos = shift_ls[rand_ind-1]  # grab the preceding tone pos
                if pre_pos > rand_pos:  # if preceding tone is above the randomly picked one
                    max_bound = pre_pos - 1
                    min_bound = pre_pos - 11 if pre_pos - 11 > min_bound else min_bound
                elif pre_pos < rand_pos:  # if preceding tone below the randomly picked one
                    min_bound = pre_pos + 1
                    max_bound = pre_pos + 11 if pre_pos+11 < max_bound else max_bound
                fol_pos = shift_ls[rand_ind+1]  # grab the following tone pos
                if fol_pos > rand_pos:  # if following tone is above the randomly picked one
                    max_bound = fol_pos - 1 if fol_pos - 1 < max_bound else max_bound
                    min_bound = fol_pos - 11 if fol_pos - 11 > min_bound else min_bound
                elif fol_pos < rand_pos:  # if following tone below the randomly picked one
                    min_bound = fol_pos + 1 if fol_pos + 1 > min_bound else min_bound
                    max_bound = fol_pos + 11 if fol_pos + 11 < max_bound else max_bound
                if max_bound == min_bound:  # if the randomly picked tone is squeezed in position by surrounding tone(s)
                    continue
                # include tone positions in the range of min_bound and max_bound
                # (inclusive), except for tone positions already used in the passed
                # pos_ls
                eligible_choices = set(range(min_bound, max_bound+1)) - set(pos_ls)
                # convert to tuple to enable use of random.choice
                eligible_choices = tuple(eligible_choices)
                # if there are no valid tone positions to replace this tone with,
                # start over to try replacing another tone in the list
                if len(eligible_choices) <= 0:
                    continue
                new_pos = choice(eligible_choices)
                shift_ls[rand_ind] = new_pos
                # if the list of tone positions ends up scalar after note shift,
                # start over
                if is_tonal(shift_ls[1:-1]):
                    continue
                # drop the 'extra' random tone positions added to start/end of
                # the list, just before the loop started
                return shift_ls[1:-1], rand_ind-1


        # generate a dictionary that will be used for grabbing filenames of each
        # tone's sound file (make sure that the .wav files are stored in a project
        # subdirectory named 'stimuli')
        tone_names = [
          "C4", "C#4", "D4", "D#4", "E4", "F4", "F#4", "G4",
          "G#4", "A4", "A#4", "B4", "C5", "C#5", "D5", "D#5",
          "E5", "F5", "F#5", "G5", "G#5", "A5", "A#5"
        ]
        tone_file_dict = {tname: 'stimuli/'+tname+'.wav' for tname in tone_names}

        # generate three-element tuples with atonal sequences that will be used for
        # each trial
        trial_seq = []
        for num_tones in range(4, 10):  # sequences should have 4-9 tones each
            # counter for number of sequences with num_tones tones that have
            # been generated
            seq_counter = 0
            iter_seq = []
            while seq_counter < 3:  # there should be 3 variations of each sequence
                new_seq = gen_atonal_sequence(num_tones, len(tone_names)-1)
                # if the generated sequence is a duplicate of a previous one
                if new_seq in iter_seq:
                    continue  # restart the while loop
                iter_seq.append(new_seq)
                # shift one tone of generated list and store as separate list.
                # also get the list index of the shifted tone
                alt_seq, alt_pos = shift_one_tone(new_seq, 0, len(tone_names)-1)
                # append tuple of generated+shifted list, after converting them to
                # character representations of tones, +shifted tone index
                trial_seq.append(
                    (conv_pos_c4(new_seq),
                    conv_pos_c4(alt_seq),
                    alt_pos)
                )
                seq_counter += 1

        # set total number of trials based on the number of atonal sequences
        n_loops = len(trial_seq)

        # initialize counter that will be used for going through the trials' tuples
        trial_counter = 0

        # initialize audio stimulus objects and assign them as values in a "tone-component
        # dictionary"
        tone_comp_dict = {}
        for key in tone_file_dict:
            tone_comp_dict[key] = sound.Sound(tone_file_dict[key], secs=0.5, stereo=True, hamming=False,
                                                                          name='melody_sound')

        # initialize visual stimuli objects
        tone_square = visual.Rect(
            win=win, name='tone_square', units='deg',
            width=2, height=2,
            ori=0, pos=(0, 3),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[0,0,0], fillColorSpace='rgb',
            opacity=1, depth=-1.0, interpolate=True)

        # set leftmost square's position
        square_1_xcoord = -13

        # create list of boxes/squares that indicate which tone is being played
        tone_square_ls = []
        # create list of text components for numbering the squares
        tone_number_ls = []
        for num, xpos in enumerate(np.arange(-14, 15, 3.5)):
            new_rect = visual.Rect(
                win=win, name='tone_square_' + str(num+1),units='deg',
                width=(2, 2)[0], height=(2, 2)[1],
                ori=0, pos=(xpos, 3),
                lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
                fillColor=[0,0,0], fillColorSpace='rgb',
                opacity=1, depth=-1.0, interpolate=True)
            new_text = visual.TextStim(win=win, name='text_num_' + str(num+1),
                text=str(num+1), units='deg',
                font='Arial',
                pos=(xpos, 3), height=0.5, wrapWidth=None, ori=0,
                color='white', colorSpace='rgb', opacity=1,
                languageStyle='LTR',
                depth=-3.0);
            tone_square_ls.append(new_rect)
            tone_number_ls.append(new_text)


        # define colors used for first/second melody, for neutral/active squares
        first_neutral_color = [0, 0, 0]
        second_neutral_color = [0.5, -0.5, -0.5]
        first_active_color = [-1, -1, -1]
        second_active_color = [1, 0, 0]
        # define color used for clicked square
        clicked_color = [1, 0.3, -1]

        # create text component that holds trial instructions
        # (cannot simply use Builder component for this, because changing opacity
        # doesn't work properly for text components, and we therefore want to be
        # able to control when the component should be drawn)
        text_trial = visual.TextStim(win=win, name='text_trial',
            text='Klicka på tonen som var annorlunda i den andra melodin',
            font='Arial', units='deg',
            pos=(0, -7), height=0.7, wrapWidth=20, ori=0,
            color='black', colorSpace='rgb', opacity=1.0,
            languageStyle='LTR',
            depth=-3.0);
      Begin Routine:
        # initialize variable that keeps track of time when last played sound started
        flips_since_last_sound = 3000  # high value to make sure that the sound is played as soon as possible

        # fetch sequences - first and (shifted) second
        trial_first_seq = trial_seq[trial_counter][0]
        trial_second_seq = trial_seq[trial_counter][1]

        # initialize counter for stepping through all tones in each sequence
        tone_counter = 0
        tone_count_max = len(trial_first_seq)  # get the number of tones in sequences

        # initialize value that indicates if playing first or second sequence at the moment
        first_or_second = 'first'

        # get xcoords for where to place the squares indicating different
        # tones (going left-to-right)
        square_xcoords = [square_1_xcoord +n*3.5 for n in range(tone_count_max)]

        # reset timing/event-related variables
        text_trial.opacity = 0
        neutral_color = first_neutral_color
        active_color = first_active_color
        quit_in_1s = False
        quit_countdown_flips = 60
        trial_start_time = tThisFlipGlobal + 0

        # set melody_sound variable to point at the sound component representing
        # the first sequence's first tone's sound
        this_tone = trial_first_seq[tone_counter]
        melody_sound = tone_comp_dict[this_tone]
      Each Frame:
        flips_since_last_sound += 1
        # if at least 39 flips/frames have passed (meaning 0.65s, for a standard computer monitor)
        if flips_since_last_sound >= 39 and first_or_second !='neither':
            melody_sound.stop()
            # if already stepped through/played all tones in sequence
            if tone_counter >= tone_count_max:
                if first_or_second == 'first':
                    first_or_second = 'second'
                    tone_counter = 0
                    # ensure that 1.3s pass between last tone of first sequence
                    # being played, and first tone of second sequence being
                    # played, by making the program wait an additional 39 frames
                    flips_since_last_sound = -39
                    for square in tone_square_ls:
                        square.fillColor = second_neutral_color
                        neutral_color = second_neutral_color
                        active_color = second_active_color
                else:
                    first_or_second = 'neither'
                    tone_counter = 9999
                    trial_mouse.status = STARTED
                    text_trial.opacity = 1
                    allowed_response_time = tThisFlipGlobal
            else:
                if first_or_second == 'first':
                    this_tone = trial_first_seq[tone_counter]
                else:
                    this_tone = trial_second_seq[tone_counter]
                melody_sound = tone_comp_dict[this_tone]
                melody_sound.play()
                flips_since_last_sound = 0
                tone_counter += 1

        # draw each tone-related square and number
        for sq_num in range(tone_count_max):
            # only change colors if not in process of quitting routine
            if not quit_in_1s:
                # the tone counter will always be one step ahead of the tone currently
                # being played here, so the square corresponding to the number one
                # below the tone counter should light up
                if sq_num == tone_counter-1:
                    tone_square_ls[sq_num].fillColor = active_color
                else:
                    tone_square_ls[sq_num].fillColor = neutral_color
                if first_or_second == 'neither':
                    text_trial.draw()
            tone_square_ls[sq_num].draw()
            tone_number_ls[sq_num].draw()

        if trial_mouse.status == STARTED:  # only update if started and not finished!
            buttons = trial_mouse.getPressed()
            if buttons != prevButtonState:  # button state changed?
                prevButtonState = buttons
                if sum(buttons) > 0:  # state changed to a new click
                    # check if the mouse was inside our 'clickable' objects
                    gotValidClick = False
                    for obj in tone_square_ls[:tone_count_max]:
                        if obj.contains(trial_mouse):
                            gotValidClick = True
                            obj.fillColor = clicked_color
                            trial_mouse.clicked_name.append(obj.name)
                            got_response_time = tThisFlipGlobal
                    if gotValidClick:  # quit in 1s
                        quit_in_1s = True

        if quit_in_1s:
            quit_countdown_flips -= 1
            if quit_countdown_flips <= 0:
                continueRoutine = False
      End Routine:
        # check if response was correct or not
        correct_index = trial_seq[trial_counter][2]
        correct_name = tone_square_ls[correct_index].name
        response_correct = correct_name in trial_mouse.clicked_name

        # check response time
        trial_response_time = got_response_time - allowed_response_time

        # save the data
        trials.addData('trial_start_time', trial_start_time)
        trials.addData('trial_response_time', trial_response_time)
        trials.addData('correct_name', correct_name)
        trials.addData('clicked_name', '|'.join(trial_mouse.clicked_name))
        trials.addData('response_correct', int(response_correct))
        trials.addData('first_melody', trial_first_seq)
        trials.addData('second_melody', trial_second_seq)

        trial_counter += 1
    MouseComponent trial_mouse
      clickable = 'placeholder'
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 9999
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  Routine instructions
    TextComponent text_instructions
      color = black
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 30
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      text:
        I det här testet får du höra melodier. Du kommer att höra två melodier i varje uppgift. Inom varje par av melodier skiljer sig bara en ton.

        Din uppgift är att avgöra vid vilken position i melodierna som tonen skiljer sig. När melodierna spelats klart får du klicka med vänster musknapp på den position som du tror är den rätta.

        Klicka med vänster musknapp på texten nedanför när du är redo att börja.
    MouseComponent mouse_instructions
      clickable = text_instructions_start
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.5
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    TextComponent text_instructions_start
      color = black
      letterHeight = 0.6
      pos = (0, -10)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Klicka här när du läst färdigt och är redo
      units = deg
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  Routine end_message
    TextComponent text_end
      color = black
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Nu är testet klart.

        Vänligen vänta på att testledaren kommer och hjälper dig.
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = n_loops
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    Routine trial
  LoopTerminator trials
  Routine end_message
